PsychoPy2experiment version="2021.1.2"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=4D95157C
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = color_simon_norep
  logging level = debug
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Routines
  Routine instructions
    TextComponent instruct_text
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        You are about to begin a block of trials in a timed color response game. You will respond to colors like in the first block of practice trials, but you will need to time your responses perfectly, like in the second block of practice trials.

        As in the first practice block, at a random time during the trial, a colored circle will appear on the right or left side of the screen. You will press a key to report the color of the circle.

        On ODD numbered trials (1, 3, 5, and so on) you will see a GREEN or ORANGE circle and you will press the W or O key with your INDEX finger.

        * If the circle is GREEN, press the W key with your LEFT POINTER finger.
        * If the circle is ORANGE, press the O key with your RIGHT POINTER finger.

        On EVEN numbered trials (2, 4, 6, and so on) you will see a BLUE or RED circle and you will press the Q or P key with your MIDDLE finger.

        * If the circle is BLUE, press the Q key with your LEFT MIDDLE finger.
        * If the circle is RED, press the P key with your RIGHT MIDDLE finger.

        As in the second practice block, each trial you will see a black cross in the center of the screen. The cross will turn into a black dot that flashes three times. After the third flash, a WHITE DOT will appear at the center of the screen.

        Please respond exactly when the WHITE DOT appears.

        When you are ready to begin the first block, please press the SPACE BAR.
    KeyboardComponent instruct_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine trial
    TextComponent trial_counter
      letterHeight = 0.02
      pos = (.5,.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $trial_num
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    PolygonComponent fixation
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .6
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    PolygonComponent dot1
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 1000
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 1
      stopVal [duration (s)] = .1
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    PolygonComponent dot2
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 1000
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = .1
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    PolygonComponent dot3
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 1000
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 2
      stopVal [duration (s)] = .1
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    PolygonComponent dot4
      fillColor = $[1,1,1]
      nVertices = 1000
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 2.5
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    PolygonComponent target
      fillColor [set every frame] = $target_color
      lineColor [set every frame] = $target_color
      nVertices = 100
      shape = regular polygon...
      size = (0.1, 0.1)
      startEstim = 1.5
      startVal [time (s)] = $target_onset
      stopVal [time (s)] = 2.6
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    KeyboardComponent trial_resp
      allowedKeys = 'q','w','o','p','esc'
      correctAns = $target_resp
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = first key
      storeCorrect = True
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    CodeComponent trial_code
      Code Type = Both
      Begin Experiment:
        accs = []
        rews = []
        too_slows = []
        trial_num = 0
      Begin JS Experiment:
        accs = [];
        rews = [];
        too_slows = [];
        too_soons = [];
        trial_num = 0;
      Begin JS Routine:
        target.setPos(eval(target_pos));
        target_onset = Math.random() + 1.5;
        trial_num = trial_num + 1;

        if (trial_num % 2 === 0) {
            target_resp = even_target_resp;
            target_color = even_target_color;
        } else {
            target_resp = odd_target_resp;
            target_color = odd_target_color;
        }
      Begin Routine:
        target.setPos(eval(target_pos))
        target_onset = 0.5
        trial_num += 1
      End JS Routine:
        psychoJS.experiment.addData('target_onset', target_onset)

        rt = trial_resp.rt;
        if (((rt >= 1.4) && (rt <= 1.6))) {
            too_slow = false;
            too_soon = false;
            if ((trial_resp.corr === 1)) {
                acc = 1;
            } else {
                acc = 0;
            }
        } else {
            if ((rt > 1.6)) {
                too_slow = true;
                too_soon = false;
                acc = 0;
            } else {
                too_slow = false;
                too_soon = true;
                acc = 0;
            }
        }
        accs += acc;
        rew = 1;
        rews += rew;
        too_slows += too_slow;
        too_soons += too_soon;
        if (too_slow) {
            feedback_test_msg = "Too Slow";
            feedback_duration = 1;
        } else {
            if (too_soon) {
                feedback_test_msg = "Too Fast";
                feedback_duration = 1;
            } else {
                feedback_test_msg = "Good timing";
                feedback_duration = 0;
            }
        }
      End Routine:
        thisExp.addData('target_onset', target_onset)
        rt = trial_resp.rt
        if rt >= 1.4 and rt <= 1.6:
            too_slow = False
            if trial_resp.corr == 1:
                acc = 1
            else:
                acc = 0
        elif rt > 1.6:
            too_slow = True
            acc = 0
        else:
            too_slow = False
            acc = 0
        accs += acc
        rew = 1
        rews += rew
        too_slows += too_slow

        if too_slow:
            feedback_test_msg = "Too Slow"
            feedback_duration = 1
        else:
            feedback_test_msg = "Good timing"
            feedback_duration = 0
  Routine feedback
    TextComponent feedback_text
      color [set every repeat] = $feedback_color
      letterHeight = 0.05
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [time (s)] = .4
      text [set every repeat] = $feedback_msg
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  Routine feedback_timing
    TextComponent feedback_text_timing
      color [set every repeat] = $feedback_color
      durationEstim = 1
      letterHeight = 0.05
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $feedback_msg
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  Routine block_note
    TextComponent block_one_text
      color = black
      letterHeight = 0.025
      startVal [condition] = block_one
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      text:
        Congrats. You completed block 1 of 10. Feel free to relax for a moment. And remember:

        * If the circle is ORANGE, press the P key with your RIGHT pointer finger, and
        * If the circle is BLUE, press the W key with your LEFT pointer finger, and
        * Please respond exactly when the WHITE DOT appears.

        Press the SPACE BAR when you are ready to continue.
    TextComponent block_later_text
      color = black
      letterHeight = 0.025
      startVal [condition] = $block_later
      text [set every repeat] = $block_note_text_msg
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    KeyboardComponent block_note_resp
      allowedKeys = 'space','esc'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent block_note_code
      Code Type = Auto->JS
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      Begin Experiment:
        block_num = 1
        block_one = True
      End Routine:
        block_num += 1
        block_later = True
        block_one = False
        block_note_text_msg = 'Congrats. You completed block ' + str(block_num) + ' of 5. Feel free to relax for a moment. And remember: \n\n* If the circle is ORANGE, press the P key with your RIGHT pointer finger, and\n* If the circle is BLUE, press the W key with your LEFT pointer finger, and\n*Please respond exactly when the WHITE DOT appears.\n\nPress the SPACE BAR when you are ready to continue.'
  Routine demographics
  Routine instructions_simon
    TextComponent instruct_text_simon
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        You are about to begin a block of practice trials in a simple color response game.

        In each trial, you will stare at a white cross in the center of the screen.

        At a random time during the trial, a colored circle will appear on the right or left side of the screen. You will next press a key to report the color of the circle. The trial number will be displayed in the upper right corner at the start of each trial.

        On ODD numbered trials (1, 3, 5, and so on) you will see a GREEN or ORANGE circle and you will press the W or O key with your INDEX finger.

        * If the circle is GREEN, press the W key with your LEFT POINTER finger.
        * If the circle is ORANGE, press the O key with your RIGHT POINTER finger.

        On EVEN numbered trials (2, 4, 6, and so on) you will see a BLUE or RED circle and you will press the Q or P key with your MIDDLE finger.

        * If the circle is BLUE, press the Q key with your LEFT MIDDLE finger.
        * If the circle is RED, press the P key with your RIGHT MIDDLE finger.

        After each trial, you will receive feedback about how you did. Please try to respond as quickly and accurately as you can.

        When you are ready to begin the block of practice trials, please press the SPACE BAR.
    KeyboardComponent instruct_resp_simon
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine instructions_timing
    TextComponent instruct_text_timing
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        You are about to begin a block of practice trials in a rapid response timing game.

        In this block, there are no colors that you need to respond to. Instead, in each trial you will see a black cross in the center of the screen. Next, the cross will turn into a black dot that flashes three times. After the third flash, a WHITE DOT will appear at the center of the screen.

        Your new goal is to respond exactly when you see the WHITE DOT.

        You can press the Q key with your left middle finger, the W key with your left pointer finger, the O key with your right pointer finger, or the P key with your right middle finger.

        We recommend that you switch between these practice your timing with all fingers.

        After each trial, you will get feedback about how you did.

        We will tell you if you were too slow or too fast.

        When you are ready to begin this block of practice trials, please press the SPACE BAR.
    KeyboardComponent instruct_resp_timing
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine trial_train_simon
    TextComponent train_trial_counter
      letterHeight = 0.02
      pos = (.5,.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $train_trial_num
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    PolygonComponent fixation_simon
      durationEstim = 1
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent target_simon
      durationEstim = 1
      fillColor [set every frame] = $target_color
      lineColor [set every frame] = $target_color
      nVertices = 100
      shape = regular polygon...
      size = (0.1, 0.1)
      startEstim = 0
      startVal [time (s)] = $target_onset
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    KeyboardComponent trial_resp_simon
      allowedKeys = 'q','w','o','p','esc'
      correctAns = $target_resp
      durationEstim = 1
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
      storeCorrect = True
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    CodeComponent trial_code_simon
      Code Type = Both
      Begin JS Experiment:
        train_trial_num = 0;
      Begin JS Routine:
        target_simon.setPos(eval(target_pos));
        target_onset = Math.random() * (1 - 0) + 0;
        train_trial_num = train_trial_num + 1;

        if (trial_num % 2 === 0) {
            target_resp = even_target_resp;
            target_color = even_target_color;
        } else {
            target_resp = odd_target_resp;
            target_color = odd_target_color;
        }
      Begin Routine:
        target.setPos(eval(target_pos))
        target_onset = 0.5
      End JS Routine:
        if ((trial_resp_simon.corr === 1)) {
            feedback_msg = "Correct!";
            feedback_color = "green";
        } else {
            feedback_msg = "Incorrect.";
            feedback_color = "red";
        }
      End Routine:
        if trial_resp_simon.corr == 1:
            feedback_msg = "Correct!"
            feedback_color = "green"
        else:
            feedback_msg = "Incorrect."
            feedback_color = "red"
  Routine trial_train_timing
    PolygonComponent fixation_timing
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .6
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    PolygonComponent dot1_timing
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 1000
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 1
      stopVal [duration (s)] = .1
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    PolygonComponent dot2_timing
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 1000
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = .1
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    PolygonComponent dot3_timing
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 1000
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 2
      stopVal [duration (s)] = .1
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    PolygonComponent dot4_timing
      fillColor = $[1,1,1]
      nVertices = 1000
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = .1
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    KeyboardComponent trial_resp_timing
      allowedKeys = 'q','w','o','p','esc'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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    CodeComponent trial_code_timing
      Code Type = Auto->JS
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      End Routine:
        rt = trial_resp_timing.rt

        if rt < 2.4:
            feedback_msg = "Too fast."
            feedback_color = "red"
        elif rt > 2.6:
            feedback_msg = "Too slow."
            feedback_color = "red"
        elif rt >= 2.4 and rt <= 2.6:
            feedback_msg = "Perfect timing!"
            feedback_color = "green"
        else:
            feedback_msg = "No response."
            feedback_color = "red"
  Routine completion
    TextComponent complete_text
      color = black
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      text [set every repeat] = $complete_msg
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    KeyboardComponent complete_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent complete_code
      Code Type = Auto->JS
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  Routine completion_survey
  Routine feedback_test
    TextComponent feedback_test_text
      color = red
      durationEstim = 1
      letterHeight = 0.05
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [time (s)] = $feedback_duration
      text [set every frame] = $feedback_test_msg
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Flow
  Routine instructions_simon
  LoopInitiator trials_train_simon loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 10
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    conditions:
      [OrderedDict([('target_pos', [-0.33, 0]), ('odd_target_resp', 'o'), ('odd_target_color', 'orange'), ('even_target_color', 'red'), ('even_target_resp', 'p')]),
      OrderedDict([('target_pos', [0.33, 0]), ('odd_target_resp', 'o'), ('odd_target_color', 'orange'), ('even_target_color', 'red'), ('even_target_resp', 'p')]),
      OrderedDict([('target_pos', [-0.33, 0]), ('odd_target_resp', 'w'), ('odd_target_color', 'green'), ('even_target_color', 'blue'), ('even_target_resp', 'q')]),
      OrderedDict([('target_pos', [0.33, 0]), ('odd_target_resp', 'w'), ('odd_target_color', 'green'), ('even_target_color', 'blue'), ('even_target_resp', 'q')])]
    Routine trial_train_simon
    Routine feedback
  LoopTerminator trials_train_simon
  Routine instructions_timing
  LoopInitiator trials_train_timing loopType="TrialHandler"
    loopType = sequential
    nReps = 1
    random seed = 60
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    Routine trial_train_timing
    Routine feedback_timing
  LoopTerminator trials_train_timing
  Routine instructions
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
    random seed = 10
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = conditions.csv
      loopType = random
      nReps = 10
      random seed = 15
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      conditions:
        [OrderedDict([('target_color', 'orange'), ('target_pos', [-0.33, 0]), ('target_resp', 'o')]),
        OrderedDict([('target_color', 'orange'), ('target_pos', [0.33, 0]), ('target_resp', 'o')]),
        OrderedDict([('target_color', 'green'), ('target_pos', [-0.33, 0]), ('target_resp', 'w')]),
        OrderedDict([('target_color', 'green'), ('target_pos', [0.33, 0]), ('target_resp', 'w')])]
      Routine trial
      Routine feedback_test
    LoopTerminator trials
    Routine block_note
  LoopTerminator blocks
  Routine completion_survey
